<PlusConfiguration version="2.1">
  <DataCollection StartupDelaySec="1.0" >
    <DeviceSet 
      Name="PlusServer: TRACKEDFRAME acquisition server. fCal phantom scan with SonixTouch US (L14-5 probe) + Ascension3DG tracker (Probe, Reference, Stylus)"
      Description="Free-hand probe motion, imaging 3 NWires, after spatial calibration. OpenIGTLink broadcasting of TRACKEDFRAME message through PlusServer." />
    <Device
      Id="TrackedVideoDevice"
      Type="SavedDataSource"
      SequenceMetafile="fCal_Test_Calibration_3NWires.mha"
      UseData="IMAGE_AND_TRANSFORM"
      UseOriginalTimestamps="TRUE"
      ToolReferenceFrame="Tracker" 
      RepeatEnabled="TRUE" >
      <DataSources>
        <DataSource Type="Video" Id="Video" />
      </DataSources>
      <OutputChannels>
        <OutputChannel Id="TrackedVideoStream" VideoDataSourceId="Video" />
      </OutputChannels>
    </Device>
  </DataCollection>
  <PlusOpenIGTLinkServer 
    MaxNumberOfIgtlMessagesToSend="1" 
    MaxTimeSpentWithProcessingMs="50" 
    ListeningPort="18000" 
    SendValidTransformsOnly="true" 
    OutputChannelId="TrackedVideoStream" > 
    <DefaultClientInfo> 
      <MessageTypes> 
        <Message Type="TRACKEDFRAME" />
      </MessageTypes>
    </DefaultClientInfo>
  </PlusOpenIGTLinkServer>    
</PlusConfiguration>
