<PlusConfiguration version="1.3">

  <!-- DATA COLLECTION -->
  <USDataCollection version="2.0" StartupDelaySec="1.0">
    
    <DeviceSet 
    Name="SonixTouch MicronTracker L14-5 + Reference + Stylus HUSSAM"
    Description="MicronTracker Hussam" 
    />

    <Tracker
    Type="MicronTracker"
    BufferSize="500"
    Frequency="5"
    LocalTimeOffset="0.0"
    AveragedItemsForFiltering="20"
    >
      
    <Tool
      Name="Probe"
      Type="Probe"
      PortName="probeMarker"
      PortNumber="0"
      SendTo="localhost:18944">
      <Model
        File="L14-5_38_ProbeModel.stl"
        ModelToToolTransform="
          0.107721 0.979858 0.168146 -115.733132
          -0.993248 0.113395 -0.024487 13.708913
          -0.043061 -0.164373 0.985458 -107.578262
          0 0 0 1"
      />
      <Calibration
        MatrixName="ImageToProbe" 
        MatrixValue="
          1 0 0 0
          0 1 0 0
          0 0 1 0
          0 0 0 1"
        Date=""
        Error="0.0" />      
    </Tool>
    
    <Tool
      Name="Reference"
      Type="Reference"
	  PortName="patientMarker"
      PortNumber="1"
      >
    </Tool>
    
    <Tool
      Name="Stylus"
      Type="Stylus"
	  PortName="stitchMarker"
      PortNumber="2"
      >
      <Model
        File="Stylus_Example.stl"
        ModelToToolTransform="
          1 0 0 -210.0
          0 1 0 0
          0 0 1 0
          0 0 0 1"
      />
      <Calibration
        MatrixName="StylusTipToStylus" 
        MatrixValue="
          1 0 0 0
          0 1 0 0
          0 0 1 0
          0 0 0 1"
        Date=""
        Error="0.0" />
    </Tool>
    
    </Tracker>

    <ImageAcquisition
      Type="SonixVideo" 
      BufferSize="500" 
      FrameSize="820 616" 
      UsImageOrientation="UF"
      FrameRate="30" 
      AveragedItemsForFiltering="20" 
      LocalTimeOffset="-0.2976"
      IP="137.82.56.243" 
      ImagingMode="BMode"
      AcquisitionDataType="BPost" 
      Depth="-1" 
      Sector="-1" 
      Gain="-1" 
      DynRange="-1" 
      Zoom="-1" 
      Frequency="-1" 
      Timeout="-1" 
      CompressionStatus="0" 
    />

    <Synchronization
      Type="ChangeDetection" 
      SynchronizationTimeLength="30" 
      MinNumOfSyncSteps="5" 
      ThresholdMultiplier="5"

      NumberOfAveragedTransforms="20" 
      MinTransformThreshold="2.0" 
      MaxTransformDifference="2.0" 

      NumberOfAveragedFrames="6" 
      MinFrameThreshold="200.0" 
      MaxFrameDifference="10.0" 
    />
    
  </USDataCollection>


  <!-- CALIBRATION -->
  <USCalibration>
    <CalibrationController>
      <ProbeCalibration />
      <SegmentationParameters
          ApproximateSpacingMmPerPixel="0.078"
          MorphologicalOpeningCircleRadiusMm="0.47"
          MorphologicalOpeningBarSizeMm="1.0"

          RegionOfInterest="27 27 793 589"

          MaxLineLengthErrorPercent="10.0"
          MaxLinePairDistanceErrorPercent="10.0"
          MaxLineErrorMm="2.0"

          AngleToleranceDegrees="10"

          MaxAngleDifferenceDegrees="11"
          MinThetaDegrees="-70"
          MaxThetaDegrees="70"
          
          ThresholdImagePercent="10.0"

          CollinearPointsMaxDistanceFromLineMm="0.41"

          UseOriginalImageIntensityForDotIntensityScore="0"
          >
      </SegmentationParameters>
    </CalibrationController>
  </USCalibration>
  
  <!-- PHANTOM -->
  <PhantomDefinition version="1.1">
    <!-- Supported types are: Double-N, U-Shaped-N -->
    <Description
      Name="fCAL"
      Type="Double-N"
      Version="1.0"
      Institution="Queen's University PerkLab"
    />
    
    <!-- ModelToPhantomTransform - transforming model into phantom coordinate system for proper visualization -->
    <Model
      File="FCal_1.0.stl"
      ModelToPhantomTransform="
        1 0 0 -15.0
        0 1 0 10.0
        0 0 1 -5.0
        0 0 0 1"
    />

    <Geometry>
      <!-- N wire definitions -->
			<Pattern Type="NWire">
				<Wire Name="1:E3_e3" EndPointFront="20.0 0.0 5.0" EndPointBack="20.0 40.0 5.0" />
				<Wire Name="2:F3_j3" EndPointFront="25.0 0.0 5.0" EndPointBack="45.0 40.0 5.0" />
				<Wire Name="3:K3_k3" EndPointFront="50.0 0.0 5.0" EndPointBack="50.0 40.0 5.0" />
			</Pattern>
			<Pattern Type="NWire">
				<Wire Name="4:E4_e4" EndPointFront="20.0 0.0 0.0" EndPointBack="20.0 40.0 0.0" />
				<Wire Name="5:J4_f4" EndPointFront="45.0 0.0 0.0" EndPointBack="25.0 40.0 0.0" />
				<Wire Name="6:K4_k4" EndPointFront="50.0 0.0 0.0" EndPointBack="50.0 40.0 0.0" />
			</Pattern>

      <!-- Landmark list for registration -->
      <Landmarks>
        <Landmark Name="#1" Position="95.0 5.0 15.0" />
        <Landmark Name="#2" Position="95.0 40.0 15.0" />
        <Landmark Name="#3" Position="95.0 40.0 0.0" />
        <Landmark Name="#4" Position="95.0 0.0 0.0" />
        
        <Landmark Name="#5" Position="-25.0 40.0 15.0" />
        <Landmark Name="#6" Position="-25.0 0.0 10.0" />
        <Landmark Name="#7" Position="-25.0 0.0 0.0" />
        <Landmark Name="#8" Position="-25.0 40.0 0.0" />
      </Landmarks>
      
      <Registration
        MatrixName="PhantomToPhantomReference" 
        MatrixValue="
          1 0 0 0
          0 1 0 0
          0 0 1 0
          0 0 0 1" 
        Date=""
        Error="0.0" />
    </Geometry>
  </PhantomDefinition>

  <!-- VOLUME RECONSTRUCTION -->
  <VolumeReconstruction OutputSpacing="0.5 0.5 0.5"
                        ClipRectangleOrigin="0 0" ClipRectangleSize="820 616"
                        Interpolation="LINEAR" Optimization="FULL" Compounding="On" FillHoles="Off"
  />

  <fCal NumberOfCalibrationImagesToAcquire="200"
        NumberOfValidationImagesToAcquire="100"
        NumberOfStylusCalibrationPointsToAcquire="200"
  />

</PlusConfiguration>