<PlusConfiguration version="2.3">

  <DataCollection StartupDelaySec="1.0">
    <DeviceSet 
      Name="PlusServer: Interson USB ultrasound device with Interson SDK."
      Description="Broadcasting acquired video through OpenIGTLink"
    />
    <Device
      Id="VideoDevice"
      Type="IntersonSDKCxxVideo" 
      PulseVoltage="1"
      AcquisitionRate="12"
      DynRangeDb="0.4" 
      FrequencyMhz="5.0" >
      <DataSources>
        <DataSource Type="Video" Id="BmodeVideo" PortName="B" PortUsImageOrientation="UN" />
      </DataSources>
      <OutputChannels>
        <OutputChannel Id="VideoStream" VideoDataSourceId="Video" >
          <RfProcessing>
            <ScanConversion 
              TransducerName="GP3.5"
              TransducerGeometry="CURVILINEAR"
              RadiusStartMm="32.8"
              RadiusStopMm="139.0"
              ThetaStartDeg="-45.0"
              ThetaStopDeg="45.0"
              OutputImageSizePixel="512 512"
              TransducerCenterPixel="256 17"
              OutputImageSpacingMmPerPixel="0.156 0.156" /> 
          </RfProcessing>
        </OutputChannel>
      </OutputChannels>
    </Device>

    <Device
      Id="CaptureDevice"
      Type="VirtualDiscCapture"
      BaseFilename="RecordingTest.mha"
      EnableCapturing="FALSE" >
      <InputChannels>
        <InputChannel Id="VideoStream" />
      </InputChannels>
    </Device>
  </DataCollection>

  <CoordinateDefinitions>
    <Transform From="Image" To="Reference"
      Matrix="
        0.2 0.0 0.0 0.0
        0.0 0.2 0.0 0.0
        0.0 0.0 0.2 0.0        
        0 0 0 1" />
  </CoordinateDefinitions>
  
  <PlusOpenIGTLinkServer 
    MaxNumberOfIgtlMessagesToSend="1" 
    MaxTimeSpentWithProcessingMs="50" 
    ListeningPort="18944" 
    SendValidTransformsOnly="true" 
    OutputChannelId="VideoStream" > 
    <DefaultClientInfo> 
      <MessageTypes> 
        <Message Type="IMAGE" />
      </MessageTypes>
      <ImageNames>
        <Image Name="Image" EmbeddedTransformToFrame="Reference" />
      </ImageNames>
    </DefaultClientInfo>
  </PlusOpenIGTLinkServer>

</PlusConfiguration>
