<PlusConfiguration version="2.0">

  <DataCollection StartupDelaySec="1.0" >
    <DeviceSet 
      Name="PlusServer: Media Foundation video capture device - color"
      Description="Broadcasting acquired video through OpenIGTLink" />
    <Device
      Id="VideoDevice" 
      Type="MmfVideo" 
      FrameSize="640x480" 
      VideoFormat="YUY2"
      CaptureDeviceId="0" >
      <DataSources>
        <DataSource Type="Video" Id="Video" PortUsImageOrientation="MF" ImageType="RGB_COLOR"  />
      </DataSources>      
      <OutputChannels>
        <OutputChannel Id="VideoStream" VideoDataSourceId="Video" />
      </OutputChannels>
    </Device>
    <Device
      Id="CaptureDevice"
      Type="VirtualDiscCapture"
      BaseFilename="RecordingTest.mha"
      EnableCapturing="FALSE" >
      <InputChannels>
        <InputChannel Id="VideoStream" />
      </InputChannels>
    </Device>
  </DataCollection>

  <CoordinateDefinitions>
    <Transform From="Image" To="Reference"
      Matrix="
        0.2 0.0 0.0 0.0
        0.0 0.2 0.0 0.0
        0.0 0.0 0.2 0.0        
        0 0 0 1" />
  </CoordinateDefinitions>
  
  <PlusOpenIGTLinkServer 
    MaxNumberOfIgtlMessagesToSend="1" 
    MaxTimeSpentWithProcessingMs="50" 
    ListeningPort="18944" 
    SendValidTransformsOnly="true" 
    OutputChannelId="VideoStream" > 
    <DefaultClientInfo> 
      <MessageTypes> 
        <Message Type="IMAGE" />
      </MessageTypes>
      <ImageNames>
        <Image Name="Image" EmbeddedTransformToFrame="Reference" />
      </ImageNames>
    </DefaultClientInfo>
  </PlusOpenIGTLinkServer>

</PlusConfiguration>
