<PlusConfiguration version="2.2">

  <DataCollection StartupDelaySec="1.0" >
    <DeviceSet 
      Name="fCal: BK ProFocus US CameraLink + OpenIGTLink tracker connection (Probe, Reference)"
      Description="BK ProFocus ultrasound scanner and OpenIGTLink TRANSFORM messages + fCal 1.2. Plus must be built in 64-bit if the operating system is 64-bit." 
    />

    <Device 
      Id="VideoDevice"
      Type="BkProFocus"
      IniFileName="BkSettings/IniFile.ini"
      AcquisitionRate="30"
      LocalTimeOffsetSec="0"
      ImagingMode="RfMode" >
      <DataSources>
        <DataSource Type="Video" Id="Video" PortUsImageOrientation="FM"  />
      </DataSources>
      <OutputChannels>
        <OutputChannel Id="VideoStream" VideoDataSourceId="Video" >
          <RfProcessing>
            <RfToBrightnessConversion 
              NumberOfHilbertFilterCoeffs="32.0" 
              BrightnessScale="20.0" />
            <ScanConversion 
              TransducerName="BK_8848-axial"
              TransducerGeometry="CURVILINEAR"
              RadiusStartMm="10.0"
              RadiusStopMm="60.0"
              ThetaStartDeg="-70.0"
              ThetaStopDeg="70.0"
              OutputImageSizePixel="600 400"
              TransducerCenterPixel="300 53"
              OutputImageSpacingMmPerPixel="0.15 0.15" /> 
          </RfProcessing>
        </OutputChannel>
      </OutputChannels>
    </Device>

    <Device
      Id="TrackerDevice"
      Type="OpenIGTLinkTracker"
      MessageType="TRANSFORM"
      ServerAddress="127.0.0.1"
      ServerPort="18944"
      IgtlMessageCrcCheckEnabled="true"
      AcquisitionRate="30"
      LocalTimeOffset="0.0"
      ToolReferenceFrame="Tracker" >
      <DataSources>
        <DataSource Type="Tool" Id="Probe" />
        <DataSource Type="Tool" Id="Reference" />
      </DataSources>
      <OutputChannels>
        <OutputChannel Id="TrackerStream">
          <DataSource Id="Probe" />
          <DataSource Id="Reference" />
        </OutputChannel>
      </OutputChannels>
    </Device>
    
    <Device 
      Id="TrackedVideoDevice" 
      Type="VirtualMixer" >
      <InputChannels>
        <InputChannel Id="TrackerStream" />
        <InputChannel Id="VideoStream" />
      </InputChannels>
      <OutputChannels>
        <OutputChannel Id="TrackedVideoStream"/>
      </OutputChannels>
    </Device>

  </DataCollection>

  <CoordinateDefinitions>
    <Transform From="Phantom" To="Reference"
      Matrix="0.9968 0.0075 -0.0795 -35.6089
              0.0794 0.0055 0.9968 -124.9852
              0.0079 -1.0000 0.0049 -16.7
              0 0 0 1"
      Date="2011.12.01 17:57:00" Error="0.0" />
    <Transform From="StylusTip" To="Stylus"
      Matrix="1 0 0 210.0
              0 1 0 0
              0 0 1 0
              0 0 0 1"
      Date="2011.12.01 17:22:12" />
    <Transform From="Image" To="TransducerOriginPixel"
      Matrix="1 0 0 -410
              0 1 0 5
              0 0 1 0
              0 0 0 1"
      Date="2011.12.06 17:57:00" Error="0.0" />
  </CoordinateDefinitions> 

  <Rendering WorldCoordinateFrame="Reference">
    <DisplayableObject Type="Model" ObjectCoordinateFrame="TransducerOrigin" Id="ProbeModel"
      File="Probe_L14-5_38.stl"
      ModelToObjectTransform="
        -1 0 0 29.7
        0 -1 0 1.5
        0 0 1 -14
        0 0 0 1" />
    <DisplayableObject Type="Model" ObjectCoordinateFrame="StylusTip" Id="StylusModel"
      File="Stylus_Example.stl"
      ModelToObjectTransform="
        1 0 0 -210.0
        0 1 0 0
        0 0 1 0
        0 0 0 1" />
  <DisplayableObject Type="Model" ObjectCoordinateFrame="Reference" Id="Volume"/>
    <DisplayableObject Id="PhantomModel" Type="Model" ObjectCoordinateFrame="Phantom"
      Opacity="0.6"
      File="fCal_1.2.stl"
      ModelToObjectTransform="
        1 0 0 -25.0
        0 0 -1 45.0
        0 1 0 -5.0
        0 0 0 1" />
    <DisplayableObject Type="Image" ObjectCoordinateFrame="Image" Id="LiveImage"/>
  </Rendering>

  <Segmentation
    ApproximateSpacingMmPerPixel="0.078"
    MorphologicalOpeningCircleRadiusMm="0.27"
    MorphologicalOpeningBarSizeMm="2.0"
    ClipRectangleOrigin="27 27" 
    ClipRectangleSize="766 562" 
    MaxLinePairDistanceErrorPercent="10"
    AngleToleranceDegrees="10"
    MaxAngleDifferenceDegrees="10"
    MinThetaDegrees="-70"
    MaxThetaDegrees="70"
    MaxLineShiftMm="10.0"
    ThresholdImagePercent="10"
    CollinearPointsMaxDistanceFromLineMm="0.6"
    UseOriginalImageIntensityForDotIntensityScore="FALSE"
    NumberOfMaximumFiducialPointCandidates="20" />

  <PhantomDefinition>
    <Description
      Name="fCAL"
      Type="Multi-N"
      Version="1.2"
      WiringVersion="1.1"
      Institution="Queen's University PerkLab" />    
    <Geometry>
      <Pattern Type="NWire">
        <Wire Name="1:E2_e2" EndPointFront="20.0 0.0 10.0" EndPointBack="20.0 40.0 10.0" />
        <Wire Name="2:I2_f2" EndPointFront="40.0 0.0 10.0" EndPointBack="25.0 40.0 10.0" />
        <Wire Name="3:J2_j2" EndPointFront="45.0 0.0 10.0" EndPointBack="45.0 40.0 10.0" />
      </Pattern>
      <Pattern Type="NWire">
        <Wire Name="4:E3_e3" EndPointFront="20.0 0.0 5.0" EndPointBack="20.0 40.0 5.0" />
        <Wire Name="5:F3_j3" EndPointFront="25.0 0.0 5.0" EndPointBack="45.0 40.0 5.0" />
        <Wire Name="6:K3_k3" EndPointFront="50.0 0.0 5.0" EndPointBack="50.0 40.0 5.0" />
      </Pattern>
      <Pattern Type="NWire">
        <Wire Name="7:E4_e4" EndPointFront="20.0 0.0 0.0" EndPointBack="20.0 40.0 0.0" />
        <Wire Name="8:J4_f4" EndPointFront="45.0 0.0 0.0" EndPointBack="25.0 40.0 0.0" />
        <Wire Name="9:K4_k4" EndPointFront="50.0 0.0 0.0" EndPointBack="50.0 40.0 0.0" />
      </Pattern>
      <Landmarks>
        <Landmark Name="#1" Position="95.0 5.0 15.0" />
        <Landmark Name="#2" Position="95.0 40.0 15.0" />
        <Landmark Name="#3" Position="95.0 40.0 0.0" />
        <Landmark Name="#4" Position="95.0 0.0 0.0" />        
        <Landmark Name="#5" Position="-25.0 40.0 15.0" />
        <Landmark Name="#6" Position="-25.0 0.0 10.0" />
        <Landmark Name="#7" Position="-25.0 0.0 0.0" />
        <Landmark Name="#8" Position="-25.0 40.0 0.0" />
      </Landmarks>      
    </Geometry>
  </PhantomDefinition>

  <VolumeReconstruction OutputSpacing="0.5 0.5 0.5"
    ClipRectangleOrigin="0 0" ClipRectangleSize="820 616"
    Interpolation="LINEAR" Optimization="FULL" Compounding="ON" FillHoles="OFF" />

  <fCal
    PhantomModelId="PhantomModel"
    ReconstructedVolumeId="Volume"
    TransducerModelId="ProbeModel"
    StylusModelId="StylusModel"
    ImageDisplayableObjectId="LiveImage"
    NumberOfCalibrationImagesToAcquire="200"
    NumberOfValidationImagesToAcquire="100"
    NumberOfStylusCalibrationPointsToAcquire="200"
    RecordingIntervalMs="100"
    MaxTimeSpentWithProcessingMs="70"
    ImageCoordinateFrame="Image"
    ProbeCoordinateFrame="Probe"
    ReferenceCoordinateFrame="Reference"
    TransducerOriginCoordinateFrame="TransducerOrigin"
    TransducerOriginPixelCoordinateFrame="TransducerOriginPixel"
    TemporalCalibrationDurationSec="10"
    DefaultSelectedChannelId="TrackedVideoStream" />

  <vtkPivotCalibrationAlgo
    ObjectMarkerCoordinateFrame="Stylus"
    ReferenceCoordinateFrame="Reference"
    ObjectPivotPointCoordinateFrame="StylusTip" />

  <vtkPhantomLandmarkRegistrationAlgo
    PhantomCoordinateFrame="Phantom"
    ReferenceCoordinateFrame="Reference"
    StylusTipCoordinateFrame="StylusTip" />
  
  <vtkPhantomLinearObjectRegistrationAlgo
    PhantomCoordinateFrame="Phantom"
    ReferenceCoordinateFrame="Reference"
    StylusTipCoordinateFrame="StylusTip" />

  <vtkProbeCalibrationAlgo
    ImageCoordinateFrame="Image"
    ProbeCoordinateFrame="Probe"
    PhantomCoordinateFrame="Phantom"
    ReferenceCoordinateFrame="Reference" />

</PlusConfiguration>
