<PlusConfiguration version="2.1">

  <DataCollection StartupDelaySec="1.0" >
    <DeviceSet 
      Name="fCal: Epiphan framegrabber + NDI Polaris tracker (Probe, Reference, Stylus)"
      Description="Epiphan framegrabber image acquisition + NDI Polaris for tracking" />

    <Device
      Id="TrackerDevice"
      Type="PolarisTracker"
      SerialPort="3"
      BaudRate="115200"
      LocalTimeOffsetSec="0.0" >
      <DataSources>
        <DataSource Type="Tool" Id="Tool" RomFile="NdiToolDefinitions/8700339.rom"  />
        <DataSource Type="Tool" Id="Stylus" RomFile="NdiToolDefinitions/8700340.rom"  />
        <DataSource Type="Tool" Id="Reference" RomFile="NdiToolDefinitions/8700449.rom"  />
      </DataSources>
      <OutputChannels>
        <OutputChannel Id="TrackerStream" >
          <DataSource Id="Tool"/>
          <DataSource Id="Reference"/>
          <DataSource Id="Stylus"/>
        </OutputChannel>
      </OutputChannels>
    </Device>

    <Device
      Id="VideoDevice" 
      Type="Epiphan" >
      <DataSources>
        <DataSource Type="Video" Id="Video" PortUsImageOrientation="MF"  />
      </DataSources>
      <OutputChannels>
        <OutputChannel Id="VideoStream" VideoDataSourceId="Video" />
      </OutputChannels>
    </Device>

    <Device 
      Id="TrackedVideoDevice" 
      Type="VirtualMixer" >
      <InputChannels>
        <InputChannel Id="TrackerStream" />
        <InputChannel Id="VideoStream" />
      </InputChannels>
      <OutputChannels>
        <OutputChannel Id="TrackedVideoStream"/>
      </OutputChannels>
    </Device>
    
  </DataCollection>

  <Rendering WorldCoordinateFrame="Tracker">
    <DisplayableObject Type="Axes" ObjectCoordinateFrame="Reference" />
    <DisplayableObject Type="Axes" ObjectCoordinateFrame="Tracker" />
  </Rendering>

  <PhantomDefinition>
    <Description
      Name="fCAL"
      Type="Multi-N"
      Version="1.0"
      WiringVersion="1.0"
      Institution="Queen's University PerkLab" />
    <Geometry>
      <Pattern Type="NWire">
        <Wire Name="1:E3_e3" EndPointFront="20.0 0.0 5.0" EndPointBack="20.0 40.0 5.0" />
        <Wire Name="2:F3_j3" EndPointFront="25.0 0.0 5.0" EndPointBack="45.0 40.0 5.0" />
        <Wire Name="3:K3_k3" EndPointFront="50.0 0.0 5.0" EndPointBack="50.0 40.0 5.0" />
      </Pattern>
      <Pattern Type="NWire">
        <Wire Name="4:E4_e4" EndPointFront="20.0 0.0 0.0" EndPointBack="20.0 40.0 0.0" />
        <Wire Name="5:J4_f4" EndPointFront="45.0 0.0 0.0" EndPointBack="25.0 40.0 0.0" />
        <Wire Name="6:K4_k4" EndPointFront="50.0 0.0 0.0" EndPointBack="50.0 40.0 0.0" />
      </Pattern>
      <Landmarks>
        <Landmark Name="#1" Position="95.0 5.0 15.0" />
        <Landmark Name="#2" Position="95.0 40.0 15.0" />
        <Landmark Name="#3" Position="95.0 40.0 0.0" />
        <Landmark Name="#4" Position="95.0 0.0 0.0" />
        <Landmark Name="#5" Position="-25.0 40.0 15.0" />
        <Landmark Name="#6" Position="-25.0 0.0 10.0" />
        <Landmark Name="#7" Position="-25.0 0.0 0.0" />
        <Landmark Name="#8" Position="-25.0 40.0 0.0" />
      </Landmarks>
    </Geometry>
  </PhantomDefinition>

  <fCal
    PhantomModelId="PhantomModel"
    TransducerModelId="ProbeModel"
    StylusModelId="StylusModel"
    ImageDisplayableObjectId="LiveImage"
    NumberOfCalibrationImagesToAcquire="200"
    NumberOfValidationImagesToAcquire="100"
    NumberOfStylusCalibrationPointsToAcquire="200"
    RecordingIntervalMs="100"
    MaxTimeSpentWithProcessingMs="70"
    ImageCoordinateFrame="Image"
    ProbeCoordinateFrame="Probe"
    ReferenceCoordinateFrame="Reference"
    TransducerOriginCoordinateFrame="TransducerOrigin"
    TransducerOriginPixelCoordinateFrame="TransducerOriginPixel"
    TemporalCalibrationDurationSec="10"
    DefaultSelectedChannelId="TrackedVideoStream" />

</PlusConfiguration>