<PlusConfiguration version="1.1">

  <DataCollection StartupDelaySec="1.0">
    <DeviceSet 
      Name="SonixTouch and Ascension3DG with Lego Phantom 2.0" 
      Description="Ascension3DG sensors should be plugged in to the Ascension3DG DriveBay mounted on SonixTouch in the following order from to leftmost slot (Transducer 1) to the right: 1 Probe, 2 Reference, 3 Stylus." 
    />
    <Device 
      Id="TrackerDevice" 
      Type="Ascension3DG" 
      LocalTimeOffsetSec="0.0" 
      FilterAcWideNotch="1" >
      <DataSources>
        <DataSource Type="Tool" Id="Probe" PortName="0"  />
        <DataSource Type="Tool" Id="Reference" PortName="1"  />
        <DataSource Type="Tool" Id="Stylus" PortName="2"  />
      </DataSources>

      <OutputChannels>
        <OutputChannel Id="TrackerStream" >
          <DataSource Id="Probe"/>
          <DataSource Id="Reference"/>
          <DataSource Id="Stylus"/>
        </OutputChannel>
      </OutputChannels>
    </Device>

    <Device
      Id="VideoDevice"
      Type="SonixVideo" 
      AcquisitionRate="30" 
      LocalTimeOffsetSec="0"
      IP="127.0.0.1" 
      Depth="-1" 
      Sector="-1" 
      Gain="-1" 
      DynRange="-1" 
      Zoom="-1" 
      Frequency="-1" 
      Timeout="-1" 
      CompressionStatus="0" >
      <DataSources>
        <DataSource Type="Video" Id="Video" PortName="B" PortUsImageOrientation="UF"  />
      </DataSources>
      
      <OutputChannels>
        <OutputChannel Id="VideoStream" VideoDataSourceId="Video" />
      </OutputChannels>
    </Device>

    <Device 
      Id="TrackedVideoDevice" 
      Type="VirtualMixer" >
      <InputChannels>
        <InputChannel Id="TrackerStream" />
        <InputChannel Id="VideoStream" />
      </InputChannels>
      
      <OutputChannels>
        <OutputChannel Id="TrackedVideoStream"/>
      </OutputChannels>
    </Device>
  </DataCollection>

  <CoordinateDefinitions>
    <Transform From="Image" To="TransducerOriginPixel"
      Matrix="
        1  0  0  -410
        0  1  0  5
        0  0  1  0
        0  0  0  1"
       Date="2011.12.06 17:57:00"/>
    <Transform From="TransducerOriginPixel" To="TransducerOrigin"
      Matrix="
        0.0796446  0  0  0
        0  0.0744856  0  0
        0  0  0.0770651  0
        0  0  0  1"
       Date="091112_160011"/>
  </CoordinateDefinitions>
  

  <Rendering WorldCoordinateFrame="Reference" DisplayedImageOrientation="MF">
    <DisplayableObject Type="Model" ObjectCoordinateFrame="TransducerOrigin" Id="ProbeModel"
      File="Probe_C5-2_60.stl"
      ModelToObjectTransform="
        -1 0 0 29.7
        0 -1 0 1.5
        0 0 1 -14
        0 0 0 1"
    />
    <DisplayableObject Type="Model" ObjectCoordinateFrame="Reference" Id="Volume"/>
    <DisplayableObject Type="Model" ObjectCoordinateFrame="StylusTip" Id="StylusModel"
      File="Stylus_Example.stl"
      ModelToObjectTransform="
        1 0 0 -210.0
        0 1 0 0
        0 0 1 0
        0 0 0 1"
    />
	
    <DisplayableObject Id="PhantomModel" Type="Model" ObjectCoordinateFrame="Phantom"
      Opacity="0.6"
      File="fCal_L2.0.stl"
      ModelToObjectTransform="
        1 0 0 0
        0 1 0 0
        0 0 1 0
        0 0 0 1"
    />
    <DisplayableObject Type="Image" ObjectCoordinateFrame="Image" Id="LiveImage"/>
  </Rendering>


  <Segmentation
    ApproximateSpacingMmPerPixel="0.078"
    MorphologicalOpeningCircleRadiusMm="0.27"
    MorphologicalOpeningBarSizeMm="1.0"
    ClipRectangleOrigin="27 27" 
    ClipRectangleSize="766 562" 
    MaxLinePairDistanceErrorPercent="10"
    AngleToleranceDegrees="10"
    MaxAngleDifferenceDegrees="10"
    MinThetaDegrees="-70"
    MaxThetaDegrees="70"
    MaxLineShiftMm="10.0"
    ThresholdImagePercent="10"
    CollinearPointsMaxDistanceFromLineMm="0.6"
    UseOriginalImageIntensityForDotIntensityScore="FALSE"
  />
  

  <PhantomDefinition>
    <!-- Supported types are: Multi-N, U-Shaped-N -->
    <Description
      Name="Lego"
      Type="Triple-N"
      Version="3.1"
      WiringVersion="1.0"
      Institution="Queen's University PerkLab"
    />

   <Geometry>      
      
	  <!-- Top set of wires -->
	  <Pattern Type="NWire"> <!-- top row from left to right -->
        <Wire Name="16:E1_e1" EndPointFront="17.15 0 71.4" EndPointBack="17.15 40.10 71.4" />
        <Wire Name="17:K1_f1" EndPointFront="39 0 71.4" EndPointBack="24.07 40.10 71.4" />
        <Wire Name="18:L1_l1" EndPointFront="46.45 0 71.4" EndPointBack="46.54 40.10 71.4" />
      </Pattern>
      <Pattern Type="NWire"> <!-- middle row from left to right -->
        <Wire Name="13:E2_e2" EndPointFront="17.15 0 61.14" EndPointBack="17.15 40.10 61.14" />
        <Wire Name="14:F2_m2" EndPointFront="24.07 0 61.14" EndPointBack="39 40.10 61.14" />
        <Wire Name="15:L2_l2" EndPointFront="46.45 0 61.14" EndPointBack="46.45 40.10 61.14" />
      </Pattern>
      <Pattern Type="NWire"> <!-- bottom row from left to right -->
        <Wire Name="10:G3_g3" EndPointFront="25.71 0 50.88" EndPointBack="25.71 40.10 50.88" />
        <Wire Name="11:K3_h3" EndPointFront="39 0 50.88" EndPointBack="31.84 40.10 50.88" />
        <Wire Name="12:L3_l3" EndPointFront="46.54 0 50.88" EndPointBack="46.45 40.10 50.88" />
      </Pattern>
	  
	  <!-- Bottom set of wires -->
	  <Pattern Type="NWire"> <!-- top row from left to right -->
        <Wire Name="7:A4_a4" EndPointFront="1.15 0 0" EndPointBack="1.15 40.10 0" />
        <Wire Name="8:K4_f4" EndPointFront="41.44 0 0" EndPointBack="24.18 40.10 0" />
        <Wire Name="9:P4_p4" EndPointFront="62.26 0 0" EndPointBack="62.26 40.10 0" />
      </Pattern>
      <Pattern Type="NWire"> <!-- middle row from left to right -->
        <Wire Name="4:A5_a5" EndPointFront="1.15 0 -10.26" EndPointBack="1.15 40.10 -10.26" />
        <Wire Name="5:F5_m5" EndPointFront="24.18 0 -10.26" EndPointBack="41.44 40.10 -10.26" />
        <Wire Name="6:P5_p5" EndPointFront="62.26 0 -10.26" EndPointBack="62.26 40.10 -10.26" />
      </Pattern>
      <Pattern Type="NWire"> <!-- bottom row from left to right -->
        <Wire Name="1:C6_c6" EndPointFront="10.38 0 -20.52" EndPointBack="10.38 40.10 -20.52" />
        <Wire Name="2:I6_f6" EndPointFront="34.58 0 -20.52" EndPointBack="24.64 40.10 -20.52" />
        <Wire Name="3:P6_p6" EndPointFront="62.26 0 -20.52" EndPointBack="62.26 40.10 -20.52" />
      </Pattern>
	  

      <Landmarks>
        <Landmark Name="#1" Position="7.98 -15.96 41.48" />
        <Landmark Name="#2" Position="71.82 -15.96 41.48" />
        <Landmark Name="#3" Position="71.82 -15.96 -38.47" />
        <Landmark Name="#4" Position="-7.98 -15.96 -38.47" />
        
        <Landmark Name="#5" Position="55.86 56.06 41.48" />
        <Landmark Name="#6" Position="7.98 56.06 41.48" />
        <Landmark Name="#7" Position="-7.98 56.06 -38.47" />
        <Landmark Name="#8" Position="71.82 56.06 -38.47" />
      </Landmarks>
      
    </Geometry>
  </PhantomDefinition>

  <VolumeReconstruction OutputSpacing="0.5 0.5 0.5"
    ClipRectangleOrigin="0 0" ClipRectangleSize="820 616"
    Interpolation="LINEAR" Optimization="FULL" Compounding="ON" FillHoles="OFF"
  />


    <fCal
    PhantomModelId="PhantomModel"
    TransducerModelId="ProbeModel"
    StylusModelId="StylusModel"
    ImageDisplayableObjectId="LiveImage"
    NumberOfCalibrationImagesToAcquire="200"
    NumberOfValidationImagesToAcquire="100"
    NumberOfStylusCalibrationPointsToAcquire="200"
    RecordingIntervalMs="100"
    MaxTimeSpentWithProcessingMs="70"
    ImageCoordinateFrame="Image"
    ProbeCoordinateFrame="Probe"
    ReferenceCoordinateFrame="Reference"
    TransducerOriginCoordinateFrame="TransducerOrigin"
    TransducerOriginPixelCoordinateFrame="TransducerOriginPixel"
    TemporalCalibrationDurationSec="10"
    DefaultSelectedChannelId="TrackedVideoStream" />

  <vtkPivotCalibrationAlgo
    ObjectMarkerCoordinateFrame="Stylus"
    ReferenceCoordinateFrame="Reference"
    ObjectPivotPointCoordinateFrame="StylusTip" />

  <vtkPhantomLandmarkRegistrationAlgo
    PhantomCoordinateFrame="Phantom"
    ReferenceCoordinateFrame="Reference"
    StylusTipCoordinateFrame="StylusTip" />
  
  <vtkPhantomLinearObjectRegistrationAlgo
    PhantomCoordinateFrame="Phantom"
    ReferenceCoordinateFrame="Reference"
    StylusTipCoordinateFrame="StylusTip" />

  <vtkProbeCalibrationAlgo
    ImageCoordinateFrame="Image"
    ProbeCoordinateFrame="Probe"
    PhantomCoordinateFrame="Phantom"
    ReferenceCoordinateFrame="Reference" />


</PlusConfiguration>