<PlusConfiguration version="2.3">

  <DataCollection StartupDelaySec="1.0" >
    <DeviceSet 
      Name="SonixTouch Ascension3DG(GPS) EC9 +Reference +Stylus" 
      Description="Ascension3DG sensors should be plugged in to the Ascension3DG DriveBay mounted on SonixTouch in the following order from to leftmost slot (Transducer 1) to the right: 1 Probe, 2 Reference, 3 Stylus. Quality value is also recorded for the tracking." />

    <Device
      Id="TrackerDevice" 
      Type="Ascension3DG" 
      LocalTimeOffsetSec="0.0" 
      FilterAcWideNotch="1" >
      <DataSources>
        <DataSource Type="Tool" Id="Probe" PortName="0"  />
        <DataSource Type="Tool" Id="Reference" PortName="1"  />
        <DataSource Type="Tool" Id="Stylus" PortName="2"  />     
        <DataSource Type="Tool" Id="Quality" PortName="quality"  />        
      </DataSources> 
      <OutputChannels>
        <OutputChannel Id="TrackerStream" >
          <DataSource Id="Probe"/>
          <DataSource Id="Reference"/>
          <DataSource Id="Stylus"/>
          <DataSource Id="Quality"/>
        </OutputChannel>
      </OutputChannels>
    </Device>

    <Device
      Id="VideoDevice"
      Type="SonixVideo" 
      AcquisitionRate="30" 
      LocalTimeOffsetSec="-0.2976"
      IP="127.0.0.1" 
      Depth="-1" 
      Sector="-1" 
      Gain="-1" 
      DynRange="-1" 
      Zoom="-1" 
      Frequency="-1" 
      Timeout="-1" 
      CompressionStatus="0" >
      <DataSources>
        <DataSource Type="Video" Id="Video" PortName="B" PortUsImageOrientation="UF"  />
      </DataSources>
      <OutputChannels>
        <OutputChannel Id="VideoStream" VideoDataSourceId="Video" />
      </OutputChannels>
    </Device>

    <Device 
      Id="TrackedVideoDevice" 
      Type="VirtualMixer" >
      <InputChannels>
        <InputChannel Id="TrackerStream" />
        <InputChannel Id="VideoStream" />
      </InputChannels>
      <OutputChannels>
        <OutputChannel Id="TrackedVideoStream"/>
      </OutputChannels>
    </Device>
    
  </DataCollection>

  <CoordinateDefinitions>
    <Transform From="Image" To="TransducerOriginPixel"
      Matrix="1 0 0 -410
              0 1 0 5
              0 0 1 0
              0 0 0 1"
      Date="2011.12.06 17:57:00" Error="0.0" />    
  </CoordinateDefinitions> 

  <Rendering WorldCoordinateFrame="Reference">
    <!-- TODO EC9 model and proper transform -->
    <DisplayableObject Type="Model" ObjectCoordinateFrame="TransducerOrigin" Id="ProbeModel"
      File="Probe_L14-5_38.stl"
      ModelToObjectTransform="
        -1 0 0 29.7
        0 -1 0 1.5
        0 0 1 -14
        0 0 0 1" />
    <DisplayableObject Type="Model" ObjectCoordinateFrame="StylusTip" Id="StylusModel"
      File="Stylus_Example.stl"
      ModelToObjectTransform="
        1 0 0 -210.0
        0 1 0 0
        0 0 1 0
        0 0 0 1" />
    <DisplayableObject Id="PhantomModel" Type="Model" ObjectCoordinateFrame="Phantom"
      Opacity="0.6"
      File="fCal_1.0.stl"
      ModelToObjectTransform="
        1 0 0 -15.0
        0 1 0 10.0
        0 0 1 -5.0
        0 0 0 1" />
    <DisplayableObject Type="Image" ObjectCoordinateFrame="Image" Id="LiveImage"/>
  </Rendering>

  <Segmentation
    ApproximateSpacingMmPerPixel="0.078"
    MorphologicalOpeningCircleRadiusMm="0.37"
    MorphologicalOpeningBarSizeMm="2.0"
    ClipRectangleOrigin="27 27" 
    ClipRectangleSize="766 562" 
    MaxLinePairDistanceErrorPercent="10"
    AngleToleranceDegrees="10"
    MaxAngleDifferenceDegrees="10"
    MinThetaDegrees="-70"
    MaxThetaDegrees="70"
    MaxLineShiftMm="10.0"
    ThresholdImagePercent="10"
    CollinearPointsMaxDistanceFromLineMm="0.6"
    UseOriginalImageIntensityForDotIntensityScore="FALSE"
    NumberOfMaximumFiducialPointCandidates="20" />

  <PhantomDefinition>
    <Description
      Name="fCAL"
      Type="Multi-N"
      Version="1.0"
      WiringVersion="1.0"
      Institution="Queen's University PerkLab" />
    <Geometry>
      <Pattern Type="NWire">
        <Wire Name="1:E3_e3" EndPointFront="20.0 0.0 5.0" EndPointBack="20.0 40.0 5.0" />
        <Wire Name="2:F3_j3" EndPointFront="25.0 0.0 5.0" EndPointBack="45.0 40.0 5.0" />
        <Wire Name="3:K3_k3" EndPointFront="50.0 0.0 5.0" EndPointBack="50.0 40.0 5.0" />
      </Pattern>
      <Pattern Type="NWire">
        <Wire Name="4:E4_e4" EndPointFront="20.0 0.0 0.0" EndPointBack="20.0 40.0 0.0" />
        <Wire Name="5:J4_f4" EndPointFront="45.0 0.0 0.0" EndPointBack="25.0 40.0 0.0" />
        <Wire Name="6:K4_k4" EndPointFront="50.0 0.0 0.0" EndPointBack="50.0 40.0 0.0" />
      </Pattern>
      <Landmarks>
        <Landmark Name="#1" Position="95.0 5.0 15.0" />
        <Landmark Name="#2" Position="95.0 40.0 15.0" />
        <Landmark Name="#3" Position="95.0 40.0 0.0" />
        <Landmark Name="#4" Position="95.0 0.0 0.0" />
        <Landmark Name="#5" Position="-25.0 40.0 15.0" />
        <Landmark Name="#6" Position="-25.0 0.0 10.0" />
        <Landmark Name="#7" Position="-25.0 0.0 0.0" />
        <Landmark Name="#8" Position="-25.0 40.0 0.0" />
      </Landmarks>
    </Geometry>
  </PhantomDefinition>

  <VolumeReconstruction OutputSpacing="0.5 0.5 0.5"
    ClipRectangleOrigin="0 0" ClipRectangleSize="820 616"
    Interpolation="LINEAR" Optimization="FULL" Compounding="ON" FillHoles="OFF" />

  <fCal
    PhantomModelId="PhantomModel"
    TransducerModelId="ProbeModel"
    StylusModelId="StylusModel"
    ImageDisplayableObjectId="LiveImage"
    NumberOfCalibrationImagesToAcquire="200"
    NumberOfValidationImagesToAcquire="100"
    NumberOfStylusCalibrationPointsToAcquire="200"
    RecordingIntervalMs="100"
    MaxTimeSpentWithProcessingMs="70"
    ImageCoordinateFrame="Image"
    ProbeCoordinateFrame="Probe"
    ReferenceCoordinateFrame="Reference"
    TransducerOriginCoordinateFrame="TransducerOrigin"
    TransducerOriginPixelCoordinateFrame="TransducerOriginPixel"
    TemporalCalibrationDurationSec="10"
    DefaultSelectedChannelId="TrackedVideoStream" />

  <vtkPivotCalibrationAlgo
    ObjectMarkerCoordinateFrame="Stylus"
    ReferenceCoordinateFrame="Reference"
    ObjectPivotPointCoordinateFrame="StylusTip" />

  <vtkPhantomLandmarkRegistrationAlgo
    PhantomCoordinateFrame="Phantom"
    ReferenceCoordinateFrame="Reference"
    StylusTipCoordinateFrame="StylusTip" />
  
  <vtkPhantomLinearObjectRegistrationAlgo
    PhantomCoordinateFrame="Phantom"
    ReferenceCoordinateFrame="Reference"
    StylusTipCoordinateFrame="StylusTip" />

  <vtkProbeCalibrationAlgo
    ImageCoordinateFrame="Image"
    ProbeCoordinateFrame="Probe"
    PhantomCoordinateFrame="Phantom"
    ReferenceCoordinateFrame="Reference" />

</PlusConfiguration>