<PlusConfiguration version="1.2">

	<USCalibration version="1.0">
		<CalibrationController LogLevel="INFO" OutputPath="./Output"    >
			<StepperCalibration MinNumberOfRotationClusters="1" >
                <!-- TemplateTranslationData: These are the data files used to calculate the template translation axis  -->
                <TemplateTranslationData 
                        NumberOfImagesToAcquire="100" 
                        OutputSequenceMetaFileSuffix=".TemplateTranslationData"
                        />
                <!-- ProbeTranslationData: These are the data files used to calculate the stepper translation axis  -->
                <ProbeTranslationData 
                        NumberOfImagesToAcquire="200" 
                        OutputSequenceMetaFileSuffix=".ProbeTranslationData"
                        />
                 <!-- ProbeRotationData: These are the data files used to calculate the frame center of rotation  -->
                <ProbeRotationData 
                        NumberOfImagesToAcquire="500" 
                        OutputSequenceMetaFileSuffix=".ProbeRotationData"
                        />
			</StepperCalibration>
			
			<ProbeCalibration
					
					ImageHomeToUserImageHomeTransform=" 1  0  0  0 
														0  1  0  0 
														0  0  1  0 
														0  0  0  1"
					DataFileSuffix=".data"
					CalibrationResultFileSuffix=".Calibration.results"
					SegmentationErrorLogFileNameSuffix=".Segmentation.errors"
					SegmentationAnalysisFileNameSuffix = ".Segmentation.analysis"
					Temp2StepCalibAnalysisFileNameSuffix = ".Template2StepperCalibration.analysis"
					>
				
				<!-- RandomStepperMotionData1: These are the data files used for calibration. -->
                <RandomStepperMotionData1
                        NumberOfImagesToAcquire="200" 
                        OutputSequenceMetaFileSuffix=".RandomStepperMotionData1"
                        />
                <!-- RandomStepperMotionData2: These are the data files used to validate the calibration accuracy.  -->
                <RandomStepperMotionData2
                        NumberOfImagesToAcquire="100" 
                        OutputSequenceMetaFileSuffix=".RandomStepperMotionData2"
                        />
                        
				<TemplateModel ConfigFile="../config/TemplateModel.xml" >
				</TemplateModel>

				<!-- IncorporatingUS3DBeamProfile: 0 - NO | 1 - BeamwidthVariance | 2 - BeamwidthRatio | 3 - BeamwidthVarianceAndThresholding -->
				<!-- ConfigFile: The name and the relative or absolute path of the US beam profile file -->
				<US3DBeamProfile IncorporatingUS3DBeamProfile="0" ConfigFile="./Component_US3DBeamProfile.config" />
			</ProbeCalibration>

			<SegmentationParameters
					ApproximateSpacingMmPerPixel="0.23"
					MorphologicalOpeningCircleRadiusMm="0.55"
					MorphologicalOpeningBarSizeMm="2.0"

					RegionOfInterest="215 230 535 410"

					MaxLineLengthErrorPercent="12.0"
					MaxLinePairDistanceErrorPercent="20.0"
					MaxLineErrorMm="2.0"
					
					MaxAngleDifferenceDegrees="11"
					MinThetaDegrees="-70"
					MaxThetaDegrees="70"
					
					AngleToleranceDegrees="11"
					
					ThresholdImagePercent="10.0"

					CollinearPointsMaxDistanceFromLineMm="1.22"

					UseOriginalImageIntensityForDotIntensityScore="0"

					>
			</SegmentationParameters>
		</CalibrationController>
	</USCalibration>

	<PhantomDefinition version="1.0">
		<!-- Supported types are: Double-N, U-Shaped-N -->
		<Description
			Name="iCAL"
			Type="Double-N"
			Version="1.0"
			Institution="Queen's University PerkLab"
		/>
		
		<!-- ModelToPhantomTransform - transforming model into phantom coordinate system for proper visualization -->
		<Model
			File="?"
			ModelToPhantomTransform="
				1 0 0 0.0
				0 1 0 0.0
				0 0 1 0.0
				0 0 0 1"
		/>

		<Geometry>
			<!-- N wire definitions -->
			<!-- Phantom origin is the inner end of the hole that is on the side of the templete holder, on the side of the triangle shaped hole on the inner part, and closest to the probe -->
			<Pattern Type="NWire" Id="0">
				<Wire Id="1" Name="wire4" EndPointFront="49.86 54.385 62.05" EndPointBack="49.86 54.385 142.05" />
				<Wire Id="2" Name="wire5" EndPointFront="39.86 54.385 62.05" EndPointBack="19.86 54.385 142.05" />
				<Wire Id="3" Name="wire6" EndPointFront="9.86 54.385 62.05" EndPointBack="9.86 54.385 142.05" />
			</Pattern>
			<Pattern Type="NWire" Id="1">
				<Wire Id="4" Name="wire1" EndPointFront="49.86 34.385 62.05" EndPointBack="49.86 34.385 142.05" />
				<Wire Id="5" Name="wire2" EndPointFront="19.86 34.385 62.05" EndPointBack="39.86 34.385 142.05" />
				<Wire Id="6" Name="wire3" EndPointFront="9.86 34.385 62.05" EndPointBack="9.86 34.385 142.05" />
			</Pattern>

			<!-- Landmark list for registration -->
			<Landmarks>
				<Landmark Name="?" Position="0.0 0.0 0.0" />
			</Landmarks>

			<Registration
				MatrixName="PhantomToPhantomReference" 
				MatrixValue="1 0 0 0 
							 0 1 0 0 
							 0 0 1 0
							 0 0 0 1" 
				Date=""
				Error="0.0" />
		</Geometry>

	  <CustomTransforms TemplateHolderToPhantomTransform="
					1 0 0 5
					0 1 0 63.5
					0 0 1 0
					0 0 0 1" />

	</PhantomDefinition>

</PlusConfiguration>
