<PlusConfiguration version="1.3">

	<!-- DATA COLLECTION -->
	<USDataCollection version="2.0" StartupDelaySec="1.0">
		<DeviceSet 
			Name="TEST Freehand calibration offline test" 
			Description="Tets for offline freehand calibration with calibratuib using SonixTouch + fCal 1.0" 
			/>

		<Tracker Type="None" >

			<!-- PROBE -->
			<Tool PortNumber="0" Type="Probe" Model="L14-5_38" Name="Probe" SendTo="127.0.0.1:1111">

      <!-- Calibration transform -->
				<Calibration
					MatrixName="ImageToProbe" 
					MatrixValue="
						1 0 0 0
						0 1 0 0
						0 0 1 0
						0 0 0 1"
					Date=""
					Error="0.0" />
			</Tool>
		</Tracker>
    
    <ImageAcquisition Type="None" />

		<Synchronization Type="None" />
	</USDataCollection>

	<!-- CALIBRATION -->
	<USCalibration>
		<CalibrationController>
      <ProbeCalibration />
			<SegmentationParameters
					ApproximateSpacingMmPerPixel="0.078"
					MorphologicalOpeningCircleRadiusMm="0.47"
					MorphologicalOpeningBarSizeMm="1.0"

					RegionOfInterest="27 27 793 589"

					MaxLineLengthErrorPercent="10.0"
					MaxLinePairDistanceErrorPercent="10.0"
					MaxLineErrorMm="2.0"

					MaxAngleDifferenceDegrees="11"
					MinThetaDegrees="-70"
					MaxThetaDegrees="70"
					
					AngleToleranceDegrees="11"
					
					ThresholdImagePercent="10.0"

					CollinearPointsMaxDistanceFromLineMm="0.41"

					UseOriginalImageIntensityForDotIntensityScore="0"
					>
			</SegmentationParameters>
		</CalibrationController>
	</USCalibration>
	
	<!-- PHANTOM -->
	<PhantomDefinition version="1.0">
		<!-- Supported types are: Double-N, U-Shaped-N -->
		<Description
			Name="fCAL"
			Type="Double-N"
			Version="1.0"
			Institution="Queen's University PerkLab"
		/>
		
		<!-- ModelToPhantomTransform - transforming model into phantom coordinate system for proper visualization -->
		<Model
			File="FCal_1.0.stl"
			ModelToPhantomTransform="
				1 0 0 -15.0
				0 1 0 10.0
				0 0 1 -5.0
				0 0 0 1"
		/>

		<Geometry>
			<!-- N wire definitions -->
			<Pattern Type="NWire" Name="top">
				<Wire Name="E3_e3" EndPointFront="20.0 0.0 5.0" EndPointBack="20.0 40.0 5.0" />
				<Wire Name="F3_j3" EndPointFront="25.0 0.0 5.0" EndPointBack="45.0 40.0 5.0" />
				<Wire Name="K3_k3" EndPointFront="50.0 0.0 5.0" EndPointBack="50.0 40.0 5.0" />
			</Pattern>
			<Pattern Type="NWire" Name="bottom">
				<Wire Name="E4_e4" EndPointFront="20.0 0.0 0.0" EndPointBack="20.0 40.0 0.0" />
				<Wire Name="J4_f4" EndPointFront="45.0 0.0 0.0" EndPointBack="25.0 40.0 0.0" />
				<Wire Name="K4_k4" EndPointFront="50.0 0.0 0.0" EndPointBack="50.0 40.0 0.0" />
			</Pattern>

			<!-- Landmark list for registration -->
			<Landmarks>
				<Landmark Name="#1" Position="95.0 5.0 15.0" />
				<Landmark Name="#2" Position="95.0 40.0 15.0" />
				<Landmark Name="#3" Position="95.0 40.0 0.0" />
				<Landmark Name="#4" Position="95.0 0.0 0.0" />
				
				<Landmark Name="#5" Position="-25.0 40.0 15.0" />
				<Landmark Name="#6" Position="-25.0 0.0 10.0" />
				<Landmark Name="#7" Position="-25.0 0.0 0.0" />
				<Landmark Name="#8" Position="-25.0 40.0 0.0" />
			</Landmarks>
			
			<Registration
				MatrixName="PhantomToPhantomReference" 
				MatrixValue="
					0.9955 -0.0286 -0.0898 -35.8654
          0.0902 0.0125 0.9958 -125.0523
          -0.0273 -0.9995 0.0150 -15.0
          0 0 0 1"
        Date="2011.08.03 14:20:09"
        Error="-1"/>

		</Geometry>
	</PhantomDefinition>

  <fCal NumberOfCalibrationImagesToAcquire="200"
        NumberOfValidationImagesToAcquire="100"
  />
  
</PlusConfiguration>