<PlusConfiguration version="1.2">

	<USCalibration version="1.0">
		<!-- CalibrationMode: OFFLINE or REALTIME -->
		<CalibrationController LogLevel="INFO" OutputPath="./Output" EnableTrackedSequenceDataSaving="FALSE" EnableErroneouslySegmentedDataSaving="FALSE" EnableSegmentationAnalysis="FALSE" CalibrationMode="OFFLINE" EnableVisualization="FALSE">
			<StepperCalibration MinNumberOfRotationClusters="4" >
				<!-- TemplateTranslationData: These are the data files used to calculate the template translation axis  -->
				<TemplateTranslationData 
						NumberOfImagesToUse="100" 
						StartingIndex="0" 
						SequenceMetaFile="\\image\shared_data\images\TRUSCalibration\2011-02-09_iCALDemo_TestData\TemplateTranslationData.mha"
						/>

				<!-- ProbeTranslationData: These are the data files used to calculate the stepper translation axis  -->
				<ProbeTranslationData 
						NumberOfImagesToUse="200" 
						StartingIndex="0" 
						SequenceMetaFile="\\image\shared_data\images\TRUSCalibration\2011-02-09_iCALDemo_TestData\ProbeTranslationData.mha"
						/>
				
				 <!-- ProbeRotationData: These are the data files used to calculate the frame center of rotation  -->
				<ProbeRotationData 
						NumberOfImagesToUse="500" 
						StartingIndex="0" 
						SequenceMetaFile="\\image\shared_data\images\TRUSCalibration\2011-02-09_iCALDemo_TestData\ProbeRotationData.mha"
						/>
			</StepperCalibration>	
			
			<ProbeCalibration
					EnableLogFile="TRUE"  
					EnableSegmentedWirePositionsSaving="FALSE"
					ImageHomeToUserImageHomeTransform=" 1  0  0  0 
														0  1  0  0 
														0  0  1  0 
														0  0  0  1"
					DataFileSuffix=".data"
					CalibrationResultFileSuffix=".Calibration.results"
					SegmentationErrorLogFileNameSuffix=".Segmentation.errors"
					SegmentationAnalysisFileNameSuffix = ".Segmentation.analysis"
					Temp2StepCalibAnalysisFileNameSuffix = ".Template2StepperCalibration.analysis"
					>
				
				 <!-- RandomStepperMotionData1: These are the data files used for calibration. -->
				<RandomStepperMotionData1
						NumberOfImagesToUse="300" 
						StartingIndex="0" 
						SequenceMetaFile="\\image\shared_data\images\TRUSCalibration\2011-02-09_iCALDemo_TestData\RandomStepperMotionData1.mha"
						/>

				<!-- RandomStepperMotionData2: These are the data files used to validate the calibration accuracy.  -->
				<RandomStepperMotionData2
						NumberOfImagesToUse="200" 
						StartingIndex="0" 
						SequenceMetaFile="\\image\shared_data\images\TRUSCalibration\2011-02-09_iCALDemo_TestData\RandomStepperMotionData2.mha"
						/>

				<TemplateModel ConfigFile="../config/TemplateModel.xml" >
				</TemplateModel>

				<!-- IncorporatingUS3DBeamProfile: 0 - NO | 1 - BeamwidthVariance | 2 - BeamwidthRatio | 3 - BeamwidthVarianceAndThresholding -->
				<!-- ConfigFile: The name and the relative or absolute path of the US beam profile file -->
				<US3DBeamProfile IncorporatingUS3DBeamProfile="0" ConfigFile="./Component_US3DBeamProfile.config" />
			</ProbeCalibration>
			
			<RealtimeCalibration>
				<!-- TemplateTranslationData: These are the data files used to calculate the template translation axis  -->
				<TemplateTranslationData 
						NumberOfImagesToAcquire="100" 
						OutputSequenceMetaFileSuffix=".TemplateTranslationData"
						/>
				<!-- ProbeTranslationData: These are the data files used to calculate the stepper translation axis  -->
				<ProbeTranslationData 
						NumberOfImagesToAcquire="200" 
						OutputSequenceMetaFileSuffix=".ProbeTranslationData"
						/>
				 <!-- ProbeRotationData: These are the data files used to calculate the frame center of rotation  -->
				<ProbeRotationData 
						NumberOfImagesToAcquire="500" 
						OutputSequenceMetaFileSuffix=".ProbeRotationData"
						/>
				 <!-- RandomStepperMotionData1: These are the data files used for calibration. -->
				<RandomStepperMotionData1
						NumberOfImagesToAcquire="200" 
						OutputSequenceMetaFileSuffix=".RandomStepperMotionData1"
						/>
				<!-- RandomStepperMotionData2: These are the data files used to validate the calibration accuracy.  -->
				<RandomStepperMotionData2
						NumberOfImagesToAcquire="100" 
						OutputSequenceMetaFileSuffix=".RandomStepperMotionData2"
						/>
			</RealtimeCalibration>
			
			<PhantomDefinition FileName="PhantomDefinition_iCal_1.0_Wiring_1.0.xml" /> 

			<!-- SearchRegionX: X-axis points to the right in pixels (there must be at least 8-pixel-wide black border outside of the search region.) -->
			<!-- SearchRegionY: Y-axis points to the bottom in pixels (there must be at least 8-pixel-wide black border outside of the search region.) -->
			<SegmentationParameters ComputeSegmentationParametersFromPhantomDefinition="1"
					FrameSize="640 480"
					
					MorphologicalOpeningCircleRadiusMm="0.55"
					MorphologicalOpeningBarSizeMm="2.0"

					RegionOfInterest="68 145 458 445"

					MaxLineLengthErrorPercent="14.0"
					MaxLinePairDistanceErrorPercent="20.0"
					MaxLineErrorMm="2.0"

					MaxAngleDifferenceDegrees="11"
					
					ThresholdImage="10.0"

					FindLines3PtDist="5.3"

					UseOriginalImageIntensityForDotIntensityScore="0"
					
					ScalingEstimation="0.21"
					ImageScalingTolerancePercent="-10 10 -10 10"                                
					ImageNormalVectorInPhantomFrameEstimation="0 0 1"
					ImageNormalVectorInPhantomFrameMaximumRotationAngleDeg="-30 30 -30 30 -50 50"
					
					ImageToPhantomTransform="-1  0 0 35
											 0  1 0 20
											 0  0 -1 2.5
											 0  0 0  1"

					>
			</SegmentationParameters>
		</CalibrationController>
	</USCalibration>

	<PhantomDefinition version="1.0">
		<!-- Supported types are: Double-N, U-Shaped-N -->
		<Description
			Name="iCAL"
			Type="Double-N"
			Version="1.0"
			Institution="Queen's University PerkLab"
		/>
		
		<!-- ModelToPhantomTransform - transforming model into phantom coordinate system for proper visualization -->
		<Model
			File="?"
			ModelToPhantomTransform="
				1 0 0 0.0
				0 1 0 0.0
				0 0 1 0.0
				0 0 0 1"
		/>

		<Geometry>
			<!-- N wire definitions -->
			<!-- Phantom origin is the inner end of the hole that is on the side of the templete holder, on the side of the triangle shaped hole on the inner part, and closest to the probe -->
			<NWire>
				<Wire Id="1" Name="wire4" EndPointFront="49.86 54.385 62.05" EndPointBack="49.86 54.385 142.05" />
				<Wire Id="2" Name="wire5" EndPointFront="39.86 54.385 62.05" EndPointBack="19.86 54.385 142.05" />
				<Wire Id="3" Name="wire6" EndPointFront="9.86 54.385 62.05" EndPointBack="9.86 54.385 142.05" />
			</NWire>
			<NWire>
				<Wire Id="4" Name="wire1" EndPointFront="49.86 34.385 62.05" EndPointBack="49.86 34.385 142.05" />
				<Wire Id="5" Name="wire2" EndPointFront="19.86 34.385 62.05" EndPointBack="39.86 34.385 142.05" />
				<Wire Id="6" Name="wire3" EndPointFront="9.86 34.385 62.05" EndPointBack="9.86 34.385 142.05" />
			</NWire>

			<!-- Landmark list for registration -->
			<Landmarks>
				<Landmark Name="?" Position="0.0 0.0 0.0" />
			</Landmarks>

			<Registration
				MatrixName="PhantomToPhantomReference" 
				MatrixValue="1 0 0 0 
							 0 1 0 0 
							 0 0 1 0
							 0 0 0 1" 
				Date="2011.05.17"
				Error="0.0" />
		</Geometry>

	  <CustomTransforms TemplateHolderToPhantomTransform="
					1 0 0 5
					0 1 0 63.5
					0 0 1 0
					0 0 0 1" />

	</PhantomDefinition>

</PlusConfiguration>
