<PlusConfiguration version="2.3" >

  <DataCollection StartupDelaySec="1">
    <DeviceSet 
      Name="SonixTouch + PolarisTracker IPEI" 
      Description="SonixTouch + PolarisTracker + Stylus Calibration + fCal 2.0 phantom, L14-5 linear transducer at 15cm depth" />

    <Device
      Id="TrackedVideoDevice"
      Type="SavedDataSource"      
      SequenceMetafile="FreehandCalibration3NWires_fCal2.0_Depth15_1.mha"
      UseData="IMAGE_AND_TRANSFORM"
      UseOriginalTimestamps="TRUE"
      RepeatEnabled="TRUE">
      <DataSources>
        <DataSource Type="Video" Id="Video" />
      </DataSources>
      <OutputChannels>
        <OutputChannel Id="TrackedVideoStream" VideoDataSourceId="Video" />
      </OutputChannels>
    </Device>

    <!--
    <Device 
      Id="TrackedVideoDevice" 
      Type="VirtualMixer" >
      <InputChannels>
        <InputChannel Id="TrackerStream" />
        <InputChannel Id="VideoStream" />
      </InputChannels>      
      <OutputChannels>
        <OutputChannel Id="TrackedVideoStream"/>
      </OutputChannels>
    </Device>

    <Device
      Type="PolarisTracker"
      SerialPort="4"
      BaudRate="115200"
      LocalTimeOffsetSec="0">
      <DataSources>
        <DataSource Type="Tool" Id="Probe" RomFile="NdiToolDefinitions/8700339.rom"/>
        <DataSource Type="Tool" Id="Stylus" RomFile="NdiToolDefinitions/8700340.rom"/>
        <DataSource Type="Tool" Id="Reference" RomFile="NdiToolDefinitions/8700449.rom"/>
      </DataSources>
      <OutputChannels>
        <OutputChannel Id="VideoOutput" />
          <DataSource Id="Probe"/>
          <DataSource Id="Stylus"/>
          <DataSource Id="Reference"/>
        </OutputChannel>
      </OutputChannels>
    </Device>

    <Device
      Id="VideoDevice"
      Type="SonixVideo" 
      AcquisitionRate="30" 
      LocalTimeOffsetSec="-0.084"
      IP="130.15.7.20" 
      Depth="-1" 
      Sector="-1" 
      Gain="-1" 
      DynRange="-1" 
      Zoom="-1" 
      Frequency="-1" 
      Timeout="-1" 
      CompressionStatus="0" >
      <DataSources>
        <DataSource Type="Video" Id="Video" PortName="B" PortUsImageOrientation="UF"  />
      </DataSources>
      <OutputChannels>
        <OutputChannel Id="VideoStream" VideoDataSourceId="Video" />
      </OutputChannels>
    </Device>
    -->

  </DataCollection>
  
  <CoordinateDefinitions>
    <Transform From="Image" To="Probe"
      Matrix="
        -0.0236898	-0.00639646	0.282565	-19.4062
        0.284629	-0.0115514	0.0232038	-119.148
        0.0121088	0.281045	0.00738477	108.85
        0	0	0	1"
       Error="0.850684" Date="010713_024345"/>
    <Transform From="Image" To="TransducerOriginPixel"
      Matrix="
        1	0	0	-410
        0	1	0	5
        0	0	1	0
        0	0	0	1"
       Date="2011.12.06 17:57:00"/>
    <Transform From="Phantom" To="Reference"
      Matrix="
        -0.216017	-0.970838	-0.103975	3.31969
        -0.801753	0.237148	-0.548592	-2.94423
        0.557251	-0.0351424	-0.8296	257.753
        0	0	0	1"
       Error="0.510761" Date="010713_021030"/>
    <Transform From="StylusTip" To="Stylus"
      Matrix="
        -0.11685	0.001114	0.993149	-18.5208
        0.00953313	0.999955	0	1.51101
        -0.993104	0.00946782	-0.116855	-157.408
        0	0	0	1"
       Error="0.222091" Date="010713_020912"/>
    <Transform From="TransducerOriginPixel" To="TransducerOrigin"
      Matrix="
        0.285918	0	0	0
        0	0.281306	0	0
        0	0	0.283613	0
        0	0	0	1"
       Date="010713_024345"/>
  </CoordinateDefinitions>
  
  <Rendering WorldCoordinateFrame="Reference">
    <DisplayableObject Type="Model" ObjectCoordinateFrame="TransducerOrigin" Id="ProbeModel" File="Probe_L14-5_38.stl"
      ModelToObjectTransform="
        -1	0	0	29.7
        0	-1	0	1.5
        0	0	1	-14
        0	0	0	1" />
    <DisplayableObject Type="Model" ObjectCoordinateFrame="Reference" Id="Volume"/>
    <DisplayableObject Type="Model" ObjectCoordinateFrame="StylusTip" Id="StylusModel" File="Stylus_Example.stl"
      ModelToObjectTransform="
        1	0	0	-210
        0	1	0	0
        0	0	1	0
        0	0	0	1" />
    <DisplayableObject
      Id="PhantomModel"
      Type="Model"
      ObjectCoordinateFrame="Phantom"
      Opacity="0.6"
      File="fCal_2.0.stl"
      ModelToObjectTransform="
        1	0	0	-35
        0	1	0	-10
        0	0	1	-5
        0	0	0	1"/>
    <DisplayableObject Type="Image" ObjectCoordinateFrame="Image" Id="LiveImage"/>
  </Rendering>

  <PhantomDefinition>
    <Description Name="fCAL" Type="Multi-N" Version="2.0" WiringVersion="2.0" Institution="Queen&apos;s University PerkLab"/>
    <Geometry>
      <Pattern Type="NWire">
        <Wire Name="7:G1_g1" EndPointFront="30.0 0.0 20.0" EndPointBack="30.0 40.0 20.0"/>
        <Wire Name="8:L1_h1" EndPointFront="55.0 0.0 20.0" EndPointBack="35.0 40.0 20.0"/>
        <Wire Name="9:M1_m1" EndPointFront="60.0 0.0 20.0" EndPointBack="60.0 40.0 20.0"/>
      </Pattern>
      <Pattern Type="NWire">
        <Wire Name="4:G3_g3" EndPointFront="30.0 0.0 10.0" EndPointBack="30.0 40.0 10.0"/>
        <Wire Name="5:H3_l3" EndPointFront="35.0 0.0 10.0" EndPointBack="55.0 40.0 10.0"/>
        <Wire Name="6:M3_m3" EndPointFront="60.0 0.0 10.0" EndPointBack="60.0 40.0 10.0"/>
      </Pattern>
      <Pattern Type="NWire">
        <Wire Name="1:H5_h5" EndPointFront="35.0 0.0 0.0" EndPointBack="35.0 40.0 0.0"/>
        <Wire Name="2:L5_i5" EndPointFront="55.0 0.0 0.0" EndPointBack="40.0 40.0 0.0"/>
        <Wire Name="3:M5_m5" EndPointFront="60.0 0.0 0.0" EndPointBack="60.0 40.0 0.0"/>
      </Pattern>
      <Landmarks>
        <Landmark Name="#1" Position="104.3 5.0 20.0"/>
        <Landmark Name="#2" Position="104.3 45.0 20.0"/>
        <Landmark Name="#3" Position="104.3 45.0 0.0"/>
        <Landmark Name="#4" Position="104.3 -5.0 0.0"/>
        <Landmark Name="#5" Position="-34.3 45.0 15.0"/>
        <Landmark Name="#6" Position="-34.3 -5.0 20.0"/>
        <Landmark Name="#7" Position="-34.3 -5.0 0.0"/>
        <Landmark Name="#8" Position="-34.3 45.0 0.0"/>
      </Landmarks>
    </Geometry>
  </PhantomDefinition>

  <VolumeReconstruction
    OutputSpacing="0.5 0.5 0.5"
    ClipRectangleOrigin="0 0"
    ClipRectangleSize="820 616"
    Interpolation="LINEAR"
    Optimization="FULL"
    Compounding="ON"
    FillHoles="OFF"/>

  <fCal
    PhantomModelId="PhantomModel"
    ReconstructedVolumeId="Volume"
    TransducerModelId="ProbeModel"
    StylusModelId="StylusModel"
    ImageDisplayableObjectId="LiveImage"
    NumberOfCalibrationImagesToAcquire="200"
    NumberOfValidationImagesToAcquire="100"
    NumberOfStylusCalibrationPointsToAcquire="200"
    RecordingIntervalMs="100"
    MaxTimeSpentWithProcessingMs="70"
    ImageCoordinateFrame="Image"
    ProbeCoordinateFrame="Probe"
    ReferenceCoordinateFrame="Reference"
    TransducerOriginCoordinateFrame="TransducerOrigin"
    TransducerOriginPixelCoordinateFrame="TransducerOriginPixel"
    TemporalCalibrationDurationSec="10"
    DefaultSelectedChannelId="TrackedVideoStream" />

  <vtkPivotCalibrationAlgo ObjectMarkerCoordinateFrame="Stylus" ReferenceCoordinateFrame="Reference" ObjectPivotPointCoordinateFrame="StylusTip"/>
  <vtkPhantomLandmarkRegistrationAlgo PhantomCoordinateFrame="Phantom" ReferenceCoordinateFrame="Reference" StylusTipCoordinateFrame="StylusTip"/>
  <vtkPhantomLinearObjectRegistrationAlgo PhantomCoordinateFrame="Phantom" ReferenceCoordinateFrame="Reference" StylusTipCoordinateFrame="StylusTip"/>
  
  <vtkProbeCalibrationAlgo 
    ImageCoordinateFrame="Image" 
    ProbeCoordinateFrame="Probe" 
    PhantomCoordinateFrame="Phantom" 
    ReferenceCoordinateFrame="Reference" 
    OptimizationMethod="2D" 
    IsotropicPixelSpacing="TRUE"/>

  <Segmentation
    ApproximateSpacingMmPerPixel="0.28692"
    MorphologicalOpeningCircleRadiusMm="0.15"
    MorphologicalOpeningBarSizeMm="10"
    ClipRectangleOrigin="221 132" 
    ClipRectangleSize="396 323" 
    MaxLinePairDistanceErrorPercent="10"
    AngleToleranceDegrees="10"
    MaxAngleDifferenceDegrees="10"
    MinThetaDegrees="-70"
    MaxThetaDegrees="70"
    ThresholdImagePercent="50.1"
    CollinearPointsMaxDistanceFromLineMm="3.1"
    UseOriginalImageIntensityForDotIntensityScore="TRUE"
    MaxLineShiftMm="10"
    NumberOfMaximumFiducialPointCandidates="35"/>

</PlusConfiguration>
