<PlusConfiguration version="2.1">

  <DataCollection StartupDelaySec="1.0">
    <DeviceSet 
      Name="TEST SegmentationParameterDialogTest - Saved dataset for video only" 
      Description="Saved dataset for video only" />

    <Device
      Id="VideoDevice"
      Type="SavedDataSource"      
      UseData="IMAGE"    
      AcquisitionRate="10" 
      LocalTimeOffsetSec="0.12" 
      SequenceMetafile="AllSegmentablefCal.mha"
      RepeatEnabled="TRUE" >
      <DataSources>
        <DataSource Type="Video" Id="Video" PortUsImageOrientation="MF"  />
      </DataSources>
      <OutputChannels>
        <OutputChannel Id="VideoStream" VideoDataSourceId="Video"  />
      </OutputChannels>
    </Device>
  </DataCollection>

  <Segmentation
    ApproximateSpacingMmPerPixel="0.078"
    MorphologicalOpeningCircleRadiusMm="0.47"
    MorphologicalOpeningBarSizeMm="1.0"
    ClipRectangleOrigin="27 27" 
    ClipRectangleSize="766 562" 
    MaxLinePairDistanceErrorPercent="10.0"
    MaxAngleDifferenceDegrees="11"
    MinThetaDegrees="-70"
    MaxThetaDegrees="70"
    MaxLineShiftMm="10.0"
    AngleToleranceDegrees="10"
    ThresholdImagePercent="10.0"
    CollinearPointsMaxDistanceFromLineMm="0.41"
    UseOriginalImageIntensityForDotIntensityScore="FALSE"
    NumberOfMaximumFiducialPointCandidates="20" />
  
  <Rendering DisplayedImageOrientation="MF"/>

  <PhantomDefinition>
    <Description
      Name="fCAL"
      Type="Multi-N"
      Version="1.0"
      WiringVersion="1.0"
      Institution="Queen's University PerkLab" />
    <Geometry>
      <Pattern Type="NWire">
        <Wire Name="1:E3_e3" EndPointFront="20.0 0.0 5.0" EndPointBack="20.0 40.0 5.0" />
        <Wire Name="2:F3_j3" EndPointFront="25.0 0.0 5.0" EndPointBack="45.0 40.0 5.0" />
        <Wire Name="3:K3_k3" EndPointFront="50.0 0.0 5.0" EndPointBack="50.0 40.0 5.0" />
      </Pattern>
      <Pattern Type="NWire">
        <Wire Name="4:E4_e4" EndPointFront="20.0 0.0 0.0" EndPointBack="20.0 40.0 0.0" />
        <Wire Name="5:J4_f4" EndPointFront="45.0 0.0 0.0" EndPointBack="25.0 40.0 0.0" />
        <Wire Name="6:K4_k4" EndPointFront="50.0 0.0 0.0" EndPointBack="50.0 40.0 0.0" />
      </Pattern>
      <Landmarks>
        <Landmark Name="#1" Position="95.0 5.0 15.0" />
        <Landmark Name="#2" Position="95.0 40.0 15.0" />
        <Landmark Name="#3" Position="95.0 40.0 0.0" />
        <Landmark Name="#4" Position="95.0 0.0 0.0" />
        
        <Landmark Name="#5" Position="-25.0 40.0 15.0" />
        <Landmark Name="#6" Position="-25.0 0.0 10.0" />
        <Landmark Name="#7" Position="-25.0 0.0 0.0" />
        <Landmark Name="#8" Position="-25.0 40.0 0.0" />
      </Landmarks>
    </Geometry>
  </PhantomDefinition>

</PlusConfiguration>